<ReactionScheme>
    
    <!-- you can specify the units of the diffusion constant. If they are not 
	 specified they are assumed to be micron^2/second, (microns written "mu" here)
	 it should understand microns, mm, and m for distances and seconds and ms for times --> 

    <Specie name="PKArc" id="PKArc" kdiff="0" kdiffunit = "mu2/s"/>
    <Specie name="PKAcamp2" id="PKAcamp2" kdiff="0" kdiffunit = "mu2/s"/>
    <Specie name="PKAc" id="PKAc" kdiff="0" kdiffunit = "mu2/s"/>
    <Specie name="PKAr" id="PKAr" kdiff="0" kdiffunit = "mu2/s"/>
    <Specie name="cAMP" id="cAMP" kdiff="3e-6" kdiffunit = "cm2/s"/>

    <Reaction name = "cAMP B bind" id="cAMP_double_binding">
	<Reactant specieID="PKArc"/>
	<Reactant specieID="cAMP" n="2"/>
	<Product specieID="PKAcamp2"/>

	<forwardRate>4.3478e-05</forwardRate>
	<reverseRate>0.02</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>

    

    <Reaction name = "PKArc dissocation" id="PKAdissoc">
	<Reactant specieID="PKAcamp2"/>
	<Product specieID="PKAr"/>
	<Product specieID="PKAc"/>

	<forwardRate>0.016</forwardRate>
	<reverseRate>0.0017</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>
	

</ReactionScheme>
